20240221_132244 Admin
Admininstrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Pin Tool Dryer;Pin Tool Dryer
1,1;Refill Trough MCA96 bck;EtOH MCA
1,2;Refill Trough MCA96 mid;ddH2O
1,3;Refill Trough MCA96 frt;10p Bleach
8,0;DiTi 200ul SBS MCA96;200ul DiTi
8,1;BlottingStation;Blot3H2O
8,2;BlottingStation;Blot2Bleach
8,3;BlottingStation;Blot1Cells
15,0;iPT384;iPT384
22,0;8 Row DeepWell Corning;Medium
22,1;96 DeepWell Greiner;StrainReservoir
22,2;8 Row DeepWell Corning;PBS
30,0;Trough 100ml;Labware14
30,1;Trough 100ml;Labware15
30,2;Trough 100ml;Labware16
31,0;Wash Station Cleaner shallow
31,1;Wash Station Waste
31,2;Wash Station Cleaner deep
32,0;Wash Station Cleaner shallow
32,1;Wash Station Waste
32,2;Wash Station Cleaner deep
33,0;384 Well Plate Greiner;lid1
33,1;384 Well Plate Greiner;lid2
40,0;96 Well Greiner SC;greiner96
40,1;384 Well Plate Greiner;plate2
46,0;Pos Camera;CAM
46,1;384 Agar Plate Greiner;placeholder2
62,0;Agar Spot Plate 6Col;Labware17
62,1;Agar Spot Plate 6Col;Labware18
1;System
51;Infinite 200
34;Te-Shake
68;StoreX 22Pos
41;RoMa Reference Site
14;Shelf 8x4Pos;384 Well Plate Greiner
63;MTP Waste
53;Hotel384;96 DeepWell Greiner
57;HotelAgar;384 Agar Plate Greiner
61;HotelAgar;384 Agar Plate Greiner
65;Hotel384;96 DeepWell Greiner
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--{ RPG }--
FACTS("ReaderNETwork","ReaderNETwork_Measure","C:\Users\COMPUTER\polybox\Robot-Malte\Luminescence\validation_experiments_2024\Output.xml|<TecanFile fileformat="Tecan.At.Measurement" fileversion="2.0">
<FileInfo instrument="infinite 200Pro" createdFrom="COMPUTER" createdAt="2024-02-21T12:19:34.2167465Z" createdWith="Tecan.At.XFluor.ReaderEditor.XFluorReaderEditor" />
<TecanMeasurement class="Measurement">
<MeasurementManualCycle number="1" type="Standard">
<CyclePlate file="GRE384sw" plateWithCover="False">
<PlateRange range="C5:C5|E5:E5|G5:G5|I5:I5|K5:K5|M5:M5" auto="false">
<Shaking mode="Linear" time="PT10S" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<Shaking mode="Orbital" time="PT10S" frequency="0" amplitude="1000" maxDeviation="PT0S" settleTime="PT0S" />
<WaitTime timeSpan="PT5S" maxDeviation="PT0S" refTimeID="0" ignoreInLastCycle="False" />
<MeasurementLuminescence mode="Normal" name="LUMI" dualColor="false">
<Well auto="true">
<MeasurementReading beamDiameter="0" beamGridType="Single" beamGridSize="0">
<ReadingLabel name="lum" scanType="ScanFixed">
<ReadingTime integrationTime="1000000" lagTime="0" readDelay="0" flash="0" dark="0" excitationTime="0" />
<ReadingFilter type="Em" wavelength="0" bandwidth="0" attenuation="0" usage="EMPTY" />
</ReadingLabel>
</MeasurementReading>
</Well>
</MeasurementLuminescence>
</PlateRange>
</CyclePlate>
</MeasurementManualCycle>
<MeasurementInfo>
<ScriptTemplateSettings>
<ScriptTemplateGeneralSettings />
<ScriptTemplateDescriptionSettings IsExternal="False" />
</ScriptTemplateSettings>
</MeasurementInfo>
</TecanMeasurement>
</TecanFile>","0","");
